WorkflowBuilder(Version=2.9.1)
Defer TrialLogic
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TaskBlocks)
    -> Merge
    -> CreateObservable DoBlock
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Block

        SubscribeSubject Block
        -> MemberSelector(Selector=TrialSets)
        -> Merge
        -> CreateObservable DoTrialSet
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialSet

            SubscribeSubject TrialSet
            -> MemberSelector(Selector=AvailableTrials.Count) => #4
            SubscribeSubject TrialSet
            -> MemberSelector(Selector=Repeats) => #6
            #4, #6 -> Zip
            -> Multiply
            -> Take(Count=1)
            -> AsyncSubject TotalTrials

            SubscribeSubject TotalTrials => #11
            SubscribeSubject TrialSet
            -> MemberSelector(Selector=Repeats)
            -> PropertyMapping(Count) => #14
            #11, #14 -> Range(Start=0, Count=1)
            -> SelectMany Shuffle
                WorkflowInput Source1

                SubscribeSubject TrialSet => #1
                SubscribeSubject RngSeedValue
                -> PropertyMapping(Seed) => #3
                #1, #3 -> ShuffleTrialSet(Seed=6)
                -> Take(Count=1)
                -> WorkflowOutput
            -> Merge => #17
            SubscribeSubject TotalTrials
            -> PropertyMapping(Count) => #19
            #17, #19 -> Take(Count=148)
            -> ToList
            -> Take(Count=1)
            -> AsyncSubject Trials

            SubscribeSubject Trials
            -> IntProperty(Value=0)
            -> MulticastSubject InitiateTrial

            BehaviorSubject<System.Int32> InitiateTrial
            -> CreateObservable DoTrial
                WorkflowInput Source1 => #0
                SubscribeSubject Trials => #1
                #0, #1 -> Zip
                -> InputMapping(Selector=Item2, Value(Selector=Item1))
                -> Index(Operand=IntProperty(Value=3)) => #4
                #4, #0 -> Zip
                -> Take(Count=1)
                -> AsyncSubject Trial

                SubscribeSubject Trial => #8
                -> Condition Rewarded
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.PresentationParameters.Rewarded)
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=TrialStartRewarded)
                #8 -> Condition Unrewarded
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item1.PresentationParameters.Rewarded)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=TrialStartUnrewarded)

                SubscribeSubject Trial
                -> MemberSelector(Selector=Item1)
                -> MulticastSubject UpdateAudioStimulus

                SubscribeSubject InterTrialIntervalDistribution => #16
                SubscribeSubject RngSeed
                -> PropertyMapping(RandomSource) => #18
                #16, #18 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution(RandomSource="")
                -> Take(Count=1)
                -> AsyncSubject InterTrialInterval

                SubscribeSubject Trial => #22
                SubscribeSubject InterTrialInterval
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #25
                #22, #25 -> Delay(DueTime=PT4.445S)
                -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Quiescence) => #27
                -> SelectMany Quiescence
                    WorkflowInput Source1

                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.StimulusStartTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT1.5S)
                    -> BooleanProperty(Value=true) => #6
                    SubscribeSubject LickDetection
                    -> BooleanProperty(Value=false) => #8
                    #6, #8 -> Merge
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition EarlyLick
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=EarlyLick) => #30
                SubscribeSubject Trial
                -> MemberSelector(Selector=Item2) => #32
                #30, #32 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #34
                #27 -> SelectMany ResponsePeriod => #35
                    WorkflowInput Source1 => #0
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowStartTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #4
                    #0, #4 -> Delay(DueTime=PT1.6S)
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=ResponseWindow)
                    -> SelectMany ResponseWindow
                        SubscribeSubject LickDetection => #0
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters) => #2
                        #0, #2 -> Zip => #3
                        -> Condition Hit
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Rewarded)
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Item2.RewardAmount)
                        -> MulticastSubject GiveReward
                        -> StringProperty(Value=Hit)
                        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Hit) => #8
                        #3 -> Condition FalseAlarm
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Rewarded)
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> StringProperty(Value=FalseAlarm)
                        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=FalseAlarm) => #11
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT0.9S) => #16
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.Rewarded) => #18
                        #16, #18 -> Zip => #19
                        -> Condition CorrectRejection
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2)
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=CorrectRejection)
                        -> StringProperty(Value=CorrectRejection) => #22
                        #19 -> Condition Miss
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2)
                            -> WorkflowOutput
                        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Miss)
                        -> StringProperty(Value=Miss) => #25
                        #8, #11, #22, #25 -> Merge
                        -> Take(Count=1)
                        -> AsyncSubject TrialResult

                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT0.9S) => #33
                        SubscribeSubject TrialResult => #34
                        #33, #34 -> Zip
                        -> MemberSelector(Selector=Item2) => #36
                        SubscribeSubject Trial => #37
                        #36, #37 -> Zip => #38
                        -> Condition NonContingentReward => #39
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Item1.PresentationParameters.NonContingentReward)
                            -> WorkflowOutput
                        -> Condition Miss
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item1)
                            -> Equal(Operand=StringProperty(Value=Miss))
                            -> WorkflowOutput
                        -> Sink GiveReward => #41
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Item1.PresentationParameters.RewardAmount)
                            -> MulticastSubject GiveReward
                            -> WorkflowOutput
                        #39 -> Condition Hit => #42
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item1)
                            -> Equal(Operand=StringProperty(Value=Hit))
                            -> WorkflowOutput
                        #41, #42 -> Merge
                        -> MemberSelector(Selector=Item1) => #44
                        #38 -> Condition ContingentReward
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Item2.Item1.PresentationParameters.NonContingentReward)
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> MemberSelector(Selector=Item1) => #46
                        #44, #46 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Condition FalseAlarm => #36
                    WorkflowInput Source1
                    -> Equal(Operand=StringProperty(Value=FalseAlarm))
                    -> WorkflowOutput
                SubscribeSubject Trial => #37
                #36, #37 -> WithLatestFrom => #38
                -> MemberSelector(Selector=Item2.Item2)
                -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Timeout) => #40
                SubscribeSubject Trial
                -> MemberSelector(Selector=Item1.PresentationParameters.TimeoutDuration)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #44
                #40, #44 -> Delay(DueTime=PT3S) => #45
                #35 -> Condition NonFalseAlarm => #46
                    WorkflowInput Source1
                    -> NotEqual(Operand=StringProperty(Value=FalseAlarm))
                    -> WorkflowOutput
                SubscribeSubject Trial
                -> MemberSelector(Selector=Item2)
                -> Add(Operand=IntProperty(Value=1)) => #49
                #46, #49 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #51
                #45, #51 -> Merge
                -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=PostResponse) => #53
                SubscribeSubject Trial
                -> MemberSelector(Selector=Item1.PresentationParameters.PostResponseTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #57
                #53, #57 -> Delay(DueTime=PT3S) => #58
                #34, #58 -> Merge
                -> Take(Count=1)
                -> Sink Reset
                    WorkflowInput Source1
                    -> Unit
                    -> MulticastSubject StopAudio
                    -> MulticastSubject StopDrawing
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=TrialEnd)
                -> WorkflowOutput
                #27 -> CreateObservable Stimulus => #64
                    WorkflowInput Source1 => #0
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.StimulusStartTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #4
                    #0, #4 -> Delay(DueTime=PT1.5S)
                    -> MemberSelector(Selector=Item1.Stimulus)
                    -> MulticastSubject DrawStimulus
                    -> MulticastSubject AudioStimulus
                    -> Unit => #9
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.StimulusDuration)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #13
                    #9, #13 -> Delay(DueTime=PT0.5S)
                    -> MulticastSubject StopDrawing
                    -> MulticastSubject StopAudio
                    -> WorkflowOutput
                #38 -> CreateObservable Timeout => #65
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject TrialInfo

                    SubscribeSubject TrialInfo
                    -> MemberSelector(Selector=Item2.Item1.PresentationParameters.TimeoutStimulus)
                    -> MulticastSubject DrawStimulus

                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.TimeoutDuration)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime)
                    -> Timer(DueTime=PT3S)
                    -> Unit
                    -> WorkflowOutput
                #64, #65 -> Merge
                -> Switch
            -> Merge
            -> BehaviorSubject TrialComplete

            SubscribeSubject TrialComplete => #31
            -> Condition ContinueTrials
                WorkflowInput Source1 => #0
                SubscribeSubject TotalTrials => #1
                #0, #1 -> WithLatestFrom
                -> LessThan
                -> WorkflowOutput
            -> MulticastSubject InitiateTrial
            #31 -> Condition FinishTrials => #34
                WorkflowInput Source1 => #0
                SubscribeSubject TotalTrials => #1
                #0, #1 -> WithLatestFrom
                -> LessThan
                -> BitwiseNot
                -> WorkflowOutput
            #31, #34 -> TakeUntil
            -> WorkflowOutput
        -> Concat
        -> Last => #8
        SubscribeSubject Block
        -> MemberSelector(Selector=MaximumBlockTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT10M) => #13
        #8, #13 -> TakeUntil
        -> WorkflowOutput
    -> Concat
    -> Sink Reset
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject StopAudio
        -> MulticastSubject StopDrawing
        -> WorkflowOutput
    -> WorkflowOutput
-> WorkflowOutput
