<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>MakeWhiteNoise</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>-2147483646</p1:Lower>
                <p1:Upper>2147483646</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>96000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Duration" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>96000</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertFromArray">
                <dsp:Size>
                  <dsp:Width>0</dsp:Width>
                  <dsp:Height>0</dsp:Height>
                </dsp:Size>
                <dsp:Depth>S32</dsp:Depth>
                <dsp:Channels>1</dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferLength" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>96000</dsp:BufferLength>
                <dsp:Frequency>5</dsp:Frequency>
                <dsp:Waveform>Sine</dsp:Waveform>
                <dsp:SampleRate>96000</dsp:SampleRate>
                <dsp:Depth>F64</dsp:Depth>
                <dsp:Amplitude>5E-05</dsp:Amplitude>
                <dsp:Offset>5E-05</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:DeviceName>Generic Software on Speakers (Cirrus Logic XU (with APO Extensions))</al:DeviceName>
          <al:SampleRate>96000</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>