WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=..\local\stage1_AindBehaviorDynamicRoutingBonsaiTaskLogic.json
  RigPath=..\local\AindBehaviorDynamicRoutingBonsaiRig.json
  SessionPath=..\local\Session.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindBehaviorDynamicRoutingBonsaiDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindBehaviorDynamicRoutingBonsaiDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.AindBehaviorDynamicRoutingBonsaiRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindBehaviorDynamicRoutingBonsaiDataSchema.DeserializeFromJson(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.AindBehaviorDynamicRoutingBonsaiTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=2)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=DataDirectory)
    -> PropertyMapping(RootFolder) => #15
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=Subject)
    -> PropertyMapping(Subject) => #18
    #15, #18 -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai
      RootFolder=..\temp_data
      Subject=Plimbo
      DateTimeOffset=0001-01-01T00:00:00.0000000+00:00
      SubjectName=LoggingRootPath

GroupWorkflow Initialization
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=PreStimulusTimeDistribution)
    -> BehaviorSubject InterTrialIntervalDistribution

    BehaviorSubject<System.Reactive.Unit> StartExperiment

GroupWorkflow Hardware
    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=DynamicRouting
          VSync=Off
          SwapSync=false
          ClearColor=DarkGray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Normal
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.Calibration)
        -> Defer LoadDisplayCalibration
            WorkflowInput Source1
            -> AsyncSubject calibration

            SubscribeSubject calibration
            -> MemberSelector(Selector=Left)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #4
            SubscribeSubject calibration
            -> MemberSelector(Selector=Center)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #7
            SubscribeSubject calibration
            -> MemberSelector(Selector=Right)
            -> IncludeWorkflow(Path=Extensions\DisplayCalibration.bonsai) => #10
            #4, #7, #10 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Left,
                Item2 as Center,
                Item3 as Right)
            -> WorkflowOutput
        -> Take(Count=1)
        -> AsyncSubject DisplayCalibration

        GroupWorkflow RenderLoop
            GroupWorkflow RenderLoop
                Bonsai.Shaders.RenderFrame
                -> PublishSubject RenderFrame
                -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-180, Right=180, Bottom=-180, Top=180)
                -> PublishSubject Draw2DStim => #3
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=Screen.Calibration.Center.Intrinsics.FrameWidth)
                -> PropertyMapping(Width) => #6
                SubscribeSubject RigSchema
                -> MemberSelector(Selector=Screen.Calibration.Center.Intrinsics.FrameHeight)
                -> PropertyMapping(Height) => #9
                #3, #6, #9 -> Disable IncludeWorkflow(Path=BonVision:Environment.SphereMapping.bonsai, ClearColor=Gray, Width=1000, Height=1000, RotationZ=0, RotationY=0, RotationX=0, FaceSize=nil) => #10
                Disable SubscribeSubject RigSchema
                -> Disable MemberSelector(Selector=Screen.Calibration.Center.Intrinsics.DisplayWidth)
                -> Disable PropertyMapping(Width) => #13
                Disable SubscribeSubject RigSchema
                -> Disable MemberSelector(Selector=Screen.Calibration.Center.Intrinsics.DisplayHeight)
                -> Disable PropertyMapping(Height) => #16
                Disable SubscribeSubject RigSchema
                -> Disable MemberSelector(Selector=Screen.Calibration.Center)
                -> Disable MemberSelector(Selector=Extrinsics.Rotation)
                -> Disable InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Disable Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
                -> Disable PropertyMapping(Rotation) => #22
                Disable SubscribeSubject RigSchema
                -> Disable MemberSelector(Selector=Screen.Calibration.Center)
                -> Disable MemberSelector(Selector=Extrinsics.Translation)
                -> Disable InputMapping(X(Selector=X), Y(Selector=Y), Z(Selector=Z))
                -> Disable Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=-20)
                -> Disable PropertyMapping(Translation) => #28
                #10, #13, #16, #22, #28 -> Disable IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=30, Height=20, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-20))
                -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=1, Height=1)
                -> PublishSubject PostDrawing
                -> WorkflowOutput

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            Disable FloatProperty(Value=1)
            -> Disable Take(Count=1)
            -> Disable BehaviorSubject WorldContrast

            Disable SubscribeSubject RigSchema
            -> Disable MemberSelector(Selector=Screen)
            -> Disable MemberSelector(Selector=Contrast) => #7
            Disable SubscribeSubject WorldContrast => #8
            #7, #8 -> Disable CombineLatest
            -> Disable Multiply
            -> Disable MulticastSubject DisplayContrast

            Disable SubscribeSubject RigSchema
            -> Disable MemberSelector(Selector=Screen)
            -> Disable MemberSelector(Selector=Brightness)
            -> Disable MulticastSubject DisplayBrightness
    -> DelaySubscription(DueTime=PT2S)

    Timer(DueTime=PT0S, Period=PT0.01S)
    -> DoubleProperty(Value=0.01)
    -> Accumulate
    -> BehaviorSubject TimeBase

    GroupWorkflow VisualStimuli
        BehaviorSubject<AindBehaviorDynamicRoutingBonsaiDataSchema.Stimulus> DrawStimulus => #0
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.GratingStimulus>)
        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=VisualStimulusStart)
        -> CreateObservable DrawGrating => #3
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Grating

            SubscribeSubject Draw2DStim => #3
            SubscribeSubject Grating
            -> MemberSelector(Selector=ExtentX)
            -> PropertyMapping(ExtentX) => #6
            SubscribeSubject Grating
            -> MemberSelector(Selector=ExtentX)
            -> PropertyMapping(ExtentY) => #9
            SubscribeSubject Grating
            -> MemberSelector(Selector=SpatialFrequency)
            -> PropertyMapping(SpatialFrequency) => #12
            SubscribeSubject Grating
            -> MemberSelector(Selector=TemporalFrequency)
            -> PropertyMapping(TemporalFrequency) => #15
            SubscribeSubject Grating
            -> MemberSelector(Selector=Aperture)
            -> PropertyMapping(Aperture) => #18
            SubscribeSubject Grating
            -> MemberSelector(Selector=Angle)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Angle) => #22
            SubscribeSubject Grating
            -> MemberSelector(Selector=Phase)
            -> Bonsai.Numerics.DegreeToRadian
            -> PropertyMapping(Phase) => #26
            #3, #6, #9, #12, #15, #18, #22, #26 -> IncludeWorkflow
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=50
              ExtentY=50
              SpatialFrequency=0.04
              TemporalFrequency=2
              Phase=90
              Angle=90
              SquareWave=false
              Contrast=1
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=1
            -> WorkflowOutput
            SubscribeSubject Grating => #29
            #3, #29 -> WithLatestFrom
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
        #0 -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.QuadStimulus>)
        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=VisualStimulusStart)
        -> CreateObservable DrawQuad => #6
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Quad

            SubscribeSubject Draw2DStim => #3
            SubscribeSubject Quad
            -> MemberSelector(Selector=ExtentX)
            -> PropertyMapping(ExtentX) => #6
            SubscribeSubject Quad
            -> MemberSelector(Selector=ExtentY)
            -> PropertyMapping(ExtentY) => #9
            SubscribeSubject Quad
            -> MemberSelector(Selector=PositionX)
            -> PropertyMapping(LocationX) => #12
            SubscribeSubject Quad
            -> MemberSelector(Selector=PositionY)
            -> PropertyMapping(LocationY) => #15
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorR)
            -> PropertyMapping(ColorR) => #18
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorG)
            -> PropertyMapping(ColorG) => #21
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorB)
            -> PropertyMapping(ColorB) => #24
            SubscribeSubject Quad
            -> MemberSelector(Selector=ColorA)
            -> PropertyMapping(ColorA) => #27
            #3, #6, #9, #12, #15, #18, #21, #24, #27 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=0, ExtentY=0, LocationX=0, LocationY=0, Layer=0, Angle=0, ColorR=1, ColorG=0, ColorB=0, ColorA=0)
            -> FloatProperty(Value=0)
            -> WorkflowOutput
            SubscribeSubject Quad => #31
            #3, #31 -> WithLatestFrom
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
        BehaviorSubject<System.Reactive.Unit> StopDrawing
        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=VisualStimulusStop)
        -> CreateObservable StopDrawing => #9
            WorkflowInput Source1

            SubscribeSubject Draw2DStim => #1
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawGratings.bonsai
              LocationX=0
              LocationY=0
              Layer=0
              ExtentX=0
              ExtentY=0
              SpatialFrequency=0
              TemporalFrequency=0
              Phase=0
              Angle=0
              SquareWave=false
              Contrast=0
              DutyCycle=nil
              Radius=1
              Aperture=0
              Opacity=0
            -> WorkflowOutput
            StringProperty(Value=StopDrawing) => #4
            #1, #4 -> WithLatestFrom
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
        #3, #6, #9 -> Merge
        -> Switch
        #0 -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.BlankStimulus>)

    GroupWorkflow AudioStimuli
        Disable SubscribeSubject RigSchema
        -> Disable MemberSelector(Selector=HarpSoundCard.PortName)
        -> Disable PropertyMapping(PortName)
        -> Disable GroupWorkflow HarpSoundCard
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpSoundCardCommands => #0
            ExternalizedMapping(PortName) => #1
            #0, #1 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
            -> PublishSubject HarpSoundCardEvents
            -> WorkflowOutput

            ExternalizedMapping(Name(DisplayName=TriggerHarpReadDumpSubjectName))
            -> SubscribeSubject TriggerHarpReadDump
            -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=On, Heartbeat=Enabled)
            -> MulticastSubject HarpSoundCardCommands
            -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateStopPayload(Stop=0))
            -> MulticastSubject HarpSoundCardCommands

        BehaviorSubject<AindBehaviorDynamicRoutingBonsaiDataSchema.Stimulus> AudioStimulus
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchStimulus(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.AudioStimulus>)
        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=AudioStimulusStart)
        -> Sink SoftwareEvent => #7
            WorkflowInput Source1
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent)
            -> MulticastSubject SoftwareEvent
            -> WorkflowOutput
        -> InputMapping(AttenuationLeft(Selector=Attenuation))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=200)) => #9
        #7 -> InputMapping(AttenuationRight(Selector=Attenuation))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=0)) => #11
        #7 -> InputMapping(PlaySoundOrFrequency(Selector=WaveformIndex))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=11)) => #13
        #9, #11, #13 -> Merge
        -> Disable MulticastSubject HarpSoundCardCommands

        BehaviorSubject<System.Reactive.Unit> StopAudio
        -> StringProperty(Value=StopAudio)
        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=AudioStimulusStop)
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateStopPayload(Stop=0))
        -> Disable MulticastSubject HarpSoundCardCommands

    Disable GroupWorkflow LickDetection
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLicketySplit.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COM15, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.LickState)
        -> BitwiseAnd(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> Unit
        -> PublishSubject LickDetection

    Disable GroupWorkflow Behavior
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpBehavior.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai, PortName=COM14, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        PublishSubject<System.Int32> GiveReward
        -> InputMapping(PulseSupplyPort0(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort0Payload(PulseSupplyPort0=24))
        -> MulticastSubject HarpBehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
        -> MulticastSubject HarpBehaviorCommands

    Disable GroupWorkflow Cameras
        SubscribeSubject RigSchema
        -> Take(Count=1)
        -> MemberSelector(Selector=CameraController)
        -> AsyncSubject TriggeredCameraController
        -> MemberSelector(Selector=FrameRate.Value)
        -> AsyncSubject CameraFrameRate

        SubscribeSubject CameraFrameRate => #6
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency) => #7
        #6 -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera1Frequency) => #8
        #7, #8 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject HarpBehaviorEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #13
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
        -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> Condition => #17
            WorkflowInput Source1
            -> WorkflowOutput
        #17, #13 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject FrameEvent

        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge
        -> CreateObservable InstantiateCamera => #24
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Camera

            BooleanProperty(Value=true)
            -> MulticastSubject TriggeredCamerasInitialized
            -> Take(Count=1) => #5
            SubscribeSubject Camera
            -> MemberSelector(Selector=Value)
            -> PropertyMapping => #8
              SerialNumber(Selector=SerialNumber)
              ExposureTime(Selector=Exposure)
              Gain(Selector=Gain)
              Binning(Selector=Binning)
              ColorProcessing(Selector=ColorProcessing)
              Gamma(Selector=Gamma)
              PixelFormat(Selector=PixelFormat)
              AdcBitDepth(Selector=AdcBitDepth)
            SubscribeSubject Camera
            -> MemberSelector(Selector=Value)
            -> MemberSelector(Selector=RegionOfInterest)
            -> InputMapping(Value(Selector="X,Y,Width,Height"))
            -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
            -> PropertyMapping(RegionOfInterest) => #14
            #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
              Index=nil
              SerialNumber=24228162
              ColorProcessing=Default
              ExposureTime=1000
              Gain=0
              Binning=1
              Gamma=nil
              PixelFormat=Mono8
              RegionOfInterest(X=0, Y=0, Width=0, Height=0)
              AdcBitDepth=Bit8
            SubscribeSubject FrameEvent => #16
            #15, #16 -> Zip
            -> Bonsai.Harp.CreateTimestamped => #18
            SubscribeSubject Camera
            -> MemberSelector(Selector=Key) => #20
            #18, #20 -> WithLatestFrom
            -> WorkflowOutput
        Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
        -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #26
        #24, #26 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Merge
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

        BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
        -> IntProperty(Value=1) => #33
        IntProperty(Value=0)
        -> Take(Count=1) => #35
        #33, #35 -> Merge
        -> Accumulate => #37
        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> MemberSelector(Selector=Count)
        -> PropertyMapping(Value) => #41
        #37, #41 -> GreaterThanOrEqual(Operand=IntProperty(Value=3))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
        -> BehaviorSubject TriggeredCamerasReady

        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #48
        SubscribeSubject TriggeredCamerasReady => #49
        #48, #49 -> Zip
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState
        -> Condition => #56
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #57
        #56 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1)) => #58
        #57, #58 -> Merge
        -> MulticastSubject HarpBehaviorCommands

    Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> Unit
    -> PublishSubject LickDetection
    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Lick)

    PublishSubject<System.Int32> GiveReward
    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Reward)

GroupWorkflow Logging
    SubscribeSubject SoftwareEvent
    -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
    SubscribeSubject RendererSynchState
    -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
    #1, #3 -> WithLatestFrom
    -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #5
    SubscribeSubject TimeBase
    -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
    #5, #7 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=Behavior)

    GroupWorkflow ConfigSchemaLogging
        SubscribeSubject SubjectSchema
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=session_output)

        SubscribeSubject TaskLogicSchema
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=tasklogic_output)

        SubscribeSubject RigSchema
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.SerializeToJson(Formatting=None)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_output)

        SubscribeSubject RawRigSchema
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_input, Extension=json)

        SubscribeSubject RawSessionSchema
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogAllText.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          DeviceName=Config
          LogName=session_input
          Extension=json

        SubscribeSubject RawTaskLogicSchema
        -> IncludeWorkflow
          Path=AllenNeuralDynamics.Core:LogAllText.bonsai
          SubjectName=LoggingRootPath
          Modality=Behavior
          DeviceName=Config
          LogName=tasklogic_input
          Extension=json

    Disable SubscribeSubject HarpSoundCardEvents
    -> Disable IncludeWorkflow
      Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
      DeviceMetadata:
        %YAML 1.1
        ---
        # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
        device: SoundCard
        whoAmI: 1280
        firmwareVersion: "2.2"
        hardwareTargets: "1.1"
        registers:
          PlaySoundOrFrequency: &frequency
            address: 32
            type: U16
            access: Write
            description: Starts the sound index (if less than 32) or frequency (if greater or equal than 32)
          Stop:
            address: 33
            type: U8
            access: Write
            description: Any value will stop the current sound
          AttenuationLeft: &attenuation
            address: 34
            type: U16
            access: Write
            description: Configure left channel's attenuation (1 LSB is 0.1dB)
          AttenuationRight:
            <<: *attenuation
            address: 35
            description: Configure right channel's attenuation (1 LSB is 0.1dB)
          AttenuationBoth:
            <<: *attenuation
            address: 36
            length: 2
            description: Configures both attenuation on right and left channels [Att R] [Att L]
          AttenuationAndPlaySoundOrFreq:
            <<: *attenuation
            address: 37
            length: 3
            description: Configures attenuation and plays sound index [Att R] [Att L] [Index]
          Reserved0: &reserved
            address: 38
            type: U8
            access: Read
            description: Reserved for future use
            visibility: private
          Reserved1:
            <<: *reserved
            address: 39
          InputState:
            address: 40
            type: U8
            access: Event
            maskType: DigitalInputs
            description: State of the digital inputs
          ConfigureDI0: &configureDI
            address: 41
            type: U8
            access: Write
            maskType: DigitalInputConfiguration
            description: Configuration of the digital input 0 (DI0)
          ConfigureDI1:
            <<: *configureDI
            address: 42
            description: Configuration of the digital input 1 (DI1)
          ConfigureDI2:
            <<: *configureDI
            address: 43
            description: Configuration of the digital input 2 (DI2)
          SoundIndexDI0: &soundIndex
            address: 44
            type: U8
            access: Write
            description: Specifies the sound index to be played when triggering DI0
          SoundIndexDI1:
            <<: *soundIndex
            address: 45
            description: Specifies the sound index to be played when triggering DI1
          SoundIndexDI2:
            <<: *soundIndex
            address: 46
            description: Specifies the sound index to be played when triggering DI2
          FrequencyDI0:
            <<: *frequency
            address: 47
            description: Specifies the sound frequency to be played when triggering DI0
          FrequencyDI1:
            <<: *frequency
            address: 48
            description: Specifies the sound frequency to be played when triggering DI1
          FrequencyDI2:
            <<: *frequency
            address: 49
            description: Specifies the sound frequency to be played when triggering DI2
          AttenuationLeftDI0:
            <<: *attenuation
            address: 50
            description: Left channel's attenuation (1 LSB is 0.5dB) when triggering DI0
          AttenuationLeftDI1:
            <<: *attenuation
            address: 51
            description: Left channel's attenuation (1 LSB is 0.5dB) when triggering DI1
          AttenuationLeftDI2:
            <<: *attenuation
            address: 52
            description: Left channel's attenuation (1 LSB is 0.5dB) when triggering DI2
          AttenuationRightDI0:
            <<: *attenuation
            address: 53
            description: Right channel's attenuation (1 LSB is 0.5dB) when triggering DI0
          AttenuationRightDI1:
            <<: *attenuation
            address: 54
            description: Right channel's attenuation (1 LSB is 0.5dB) when triggering DI1
          AttenuationRightDI2:
            <<: *attenuation
            address: 55
            description: Right channel's attenuation (1 LSB is 0.5dB) when triggering DI2
          AttenuationAndSoundIndexDI0:
            <<: *attenuation
            address: 56
            length: 3
            description: Sound index and attenuation to be played when triggering DI0 [Att R] [Att L] [Index]
          AttenuationAndSoundIndexDI1:
            <<: *attenuation
            address: 57
            length: 3
            description: Sound index and attenuation to be played when triggering DI1 [Att R] [Att L] [Index]
          AttenuationAndSoundIndexDI2:
            <<: *attenuation
            address: 58
            length: 3
            description: Sound index and attenuation to be played when triggering DI2 [Att R] [Att L] [Index]
          AttenuationAndFrequencyDI0:
            <<: *attenuation
            address: 59
            length: 2
            description: Sound index and attenuation to be played when triggering DI0 [Att BOTH] [Frequency]
          AttenuationAndFrequencyDI1:
            <<: *attenuation
            address: 60
            length: 2
            description: Sound index and attenuation to be played when triggering DI1 [Att BOTH] [Frequency]
          AttenuationAndFrequencyDI2:
            <<: *attenuation
            address: 61
            length: 2
            description: Sound index and attenuation to be played when triggering DI2 [Att BOTH] [Frequency]
          Reserved2:
            <<: *reserved
            address: 62
          Reserved3:
            <<: *reserved
            address: 63
          Reserved4:
            <<: *reserved
            address: 64
          ConfigureDO0: &configureDO
            address: 65
            type: U8
            access: Write
            maskType: DigitalOutputConfiguration
            description: Configuration of the digital output 0 (DO0)
          ConfigureDO1:
            <<: *configureDO
            address: 66
            description: Configuration of the digital output 1 (DO1)
          ConfigureDO2:
            <<: *configureDO
            address: 67
            description: Configuration of the digital output 2 (DO2
          PulseDO0: &pulseDO
            address: 68
            type: U8
            access: Write
            minValue: 1
            maxValue: 255
            description: Pulse for the digital output 0 (DO0)
          PulseDO1:
            <<: *pulseDO
            address: 69
            description: Pulse for the digital output 1 (DO1)
          PulseDO2:
            <<: *pulseDO
            address: 70
            description: Pulse for the digital output 2 (DO2)
          Reserved5:
            <<: *reserved
            address: 71
          Reserved6:
            <<: *reserved
            address: 72
          Reserved7:
            <<: *reserved
            address: 73
          OutputSet: &output
            address: 74
            type: U8
            access: Write
            maskType: DigitalOutputs
            description: Set the specified digital output lines
          OutputClear:
            <<: *output
            address: 75
            description: Clear the specified digital output lines
          OutputToggle:
            <<: *output
            address: 76
            description: Toggle the specified digital output lines
          OutputState:
            <<: *output
            address: 77
            description: Write the state of all digital output lines
          Reserved8:
            <<: *reserved
            address: 78
          Reserved9:
            <<: *reserved
            address: 79
          ConfigureAdc:
            address: 80
            type: U8
            access: Write
            maskType: AdcConfiguration
            description: Configuration of Analog Inputs
          AnalogData:
            address: 81
            type: U16
            access: Event
            length: 5
            description: Contains sampled analog input data or dynamic sound parameters controlled by the ADC channels. Values are zero if not used.
            payloadSpec:
              Adc0:
                offset: 0
                description: The sampled analog input value on ADC0.
              Adc1:
                offset: 1
                description: The sampled analog input value on ADC1.
              AttenuationLeft:
                offset: 2
                description: The amplitude of the left channel controlled by ADC0.
              AttenuationRight:
                offset: 3
                description: The amplitude of the right channel controlled by ADC0.
              Frequency:
                offset: 4
                description: The output frequency controlled by ADC1.
          Commands:
            address: 82
            type: U8
            access: Write
            maskType: ControllerCommand
            description: Send commands to PIC32 micro-controller
          Reserved10:
            <<: *reserved
            address: 83
          Reserved11:
            <<: *reserved
            address: 84
          Reserved12:
            <<: *reserved
            address: 85
          EnableEvents:
            address: 86
            type: U8
            access: Write
            maskType: SoundCardEvents
            description: Specifies the active events in the SoundCard device
        bitMasks:
          DigitalInputs:
            description: Specifies the state of the digital input lines.
            bits:
              DI0: 0x1
          DigitalOutputs:
            description: Specifies the state of the digital output lines.
            bits:
              DO0: 0x1
              DO1: 0x2
              DO2: 0x3
          SoundCardEvents:
            description: Specifies the active events in the SoundCard.
            bits:
              PlaySoundOrFrequency: 0x1
              Stop: 0x2
              DigitalInputs: 0x4
              AdcValues: 0x8
        groupMasks:
          DigitalInputConfiguration:
            description: Specifies the operation mode of the digital input.
            values:
              Digital: {value: 0, description: Used as a pure digital input.}
              StartAndStopSound: {value: 1, description: Starts sound when rising edge and stop when falling edge.}
              StartSound: {value: 2, description: Starts sound when rising edge.}
              Stop: {value: 3, description: Stops sound or frequency when rising edge.}
              StartAndStopFrequency: {value: 4, description: Starts frequency when rising edge and stop when falling edge.}
              StartFrequency: {value: 5, description: Starts frequency when rising edge.}
          DigitalOutputConfiguration:
            description: Specifies the operation mode of the digital output.
            values:
              Digital: {value: 0, description: Used as a pure digital output.}
              Pulse: {value: 1, description: The digital output will be high during a period specified by register DOxPulse.}
              HighWhenSound: {value: 2, description: High when the sound is being played. }
              Pulse1MsWhenStart: {value: 3, description: High when sound starts during 1 ms. }
              Pulse10MsWhenStart: {value: 4, description: High when sound starts during 10 ms. }
              Pulse100MsWhenStart: {value: 5, description: High when sound starts during 100 ms. }
              Pulse1MsWhenStop: {value: 6, description: High when sound stops during 1 ms. }
              Pulse10MsWhenStop: {value: 7, description: High when sound stops during 10 ms. }
              Pulse100MsWhenStop: {value: 8, description: High when sound starts during 100 ms. }
          ControllerCommand:
            description: Specifies commands to send to the PIC32 micro-controller
            values:
              DisableBootloader: 0
              EnableBootloader: 1
              DeleteAllSounds: 255
          AdcConfiguration:
            description: Specifies the operation mode of the analog inputs.
            values:
              NotUsed: 0
              AdcAdc: 1
              AmplitudeBothAdc: 2
              AmplitudeLeftAdc: 3
              AmplitudeRightAdc: 4
              AmplitudeLeftAmplitudeRight: 5
              AmplitudeBothFrequency: 6
      Modality=Behavior
      DeviceName=SoundCard

    Disable SubscribeSubject HarpBehaviorEvents
    -> Disable IncludeWorkflow
      Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
      DeviceMetadata:
        %YAML 1.1
        ---
        # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
        device: Behavior
        whoAmI: 1216
        firmwareVersion: "3.3"
        hardwareTargets: "1.1"
        registers:
          DigitalInputState:
            address: 32
            access: Event
            type: U8
            maskType: DigitalInputs
            description: Reflects the state of DI digital lines of each Port
          Reserved0: &reserved
            address: 33
            type: U8
            access: Read
            description: Reserved for future use
            visibility: private
          OutputSet: &output
            address: 34
            type: U16
            access: Write
            maskType: DigitalOutputs
            description: Set the specified digital output lines.
          OutputClear:
            <<: *output
            address: 35
            description: Clear the specified digital output lines
          OutputToggle:
            <<: *output
            address: 36
            description: Toggle the specified digital output lines
          OutputState:
            <<: *output
            address: 37
            description: Write the state of all digital output lines
          PortDIOSet: &portDIO
            address: 38
            type: U8
            access: Write
            maskType: PortDigitalIOS
            description: Set the specified port DIO lines
          PortDIOClear:
            <<: *portDIO
            address: 39
            description: Clear the specified port DIO lines
          PortDIOToggle:
            <<: *portDIO
            address: 40
            description: Toggle the specified port DIO lines
          PortDIOState:
            <<: *portDIO
            address: 41
            description: Write the state of all port DIO lines
          PortDIODirection:
            <<: *portDIO
            address: 42
            description: Specifies which of the port DIO lines are outputs
          PortDIOStateEvent:
            <<: *portDIO
            address: 43
            access: Event
            description: Specifies the state of the port DIO lines on a line change
          AnalogData:
            address: 44
            type: S16
            length: 3
            access: Event
            description: Voltage at the ADC input and encoder value on Port 2
            payloadSpec:
              AnalogInput0:
                offset: 0
                description: The voltage at the output of the ADC channel 0.
              Encoder:
                offset: 1
                description: The quadrature counter value on Port 2
              AnalogInput1:
                offset: 2
                description: The voltage at the output of the ADC channel 1.
          OutputPulseEnable:
            <<: *output
            address: 45
            description: Enables the pulse function for the specified output lines
          PulseDOPort0: &pulseDO
            address: 46
            type: U16
            access: Write
            minValue: 1
            description: Specifies the duration of the output pulse in milliseconds.
          PulseDOPort1:
            <<: *pulseDO
            address: 47
          PulseDOPort2:
            <<: *pulseDO
            address: 48
          PulseSupplyPort0:
            <<: *pulseDO
            address: 49
          PulseSupplyPort1:
            <<: *pulseDO
            address: 50
          PulseSupplyPort2:
            <<: *pulseDO
            address: 51
          PulseLed0:
            <<: *pulseDO
            address: 52
          PulseLed1:
            <<: *pulseDO
            address: 53
          PulseRgb0:
            <<: *pulseDO
            address: 54
          PulseRgb1:
            <<: *pulseDO
            address: 55
          PulseDO0:
            <<: *pulseDO
            address: 56
          PulseDO1:
            <<: *pulseDO
            address: 57
          PulseDO2:
            <<: *pulseDO
            address: 58
          PulseDO3:
            <<: *pulseDO
            address: 59
          PwmFrequencyDO0: &pwmFreq
            address: 60
            type: U16
            access: Write
            minValue: 1
            description: Specifies the frequency of the PWM at DO0.
          PwmFrequencyDO1:
            <<: *pwmFreq
            address: 61
            description: Specifies the frequency of the PWM at DO1.
          PwmFrequencyDO2:
            <<: *pwmFreq
            address: 62
            description: Specifies the frequency of the PWM at DO2.
          PwmFrequencyDO3:
            <<: *pwmFreq
            address: 63
            description: Specifies the frequency of the PWM at DO3.
          PwmDutyCycleDO0: &pwmDutyCycle
            address: 64
            type: U8
            access: Write
            minValue: 1
            maxValue: 99
            description: Specifies the duty cycle of the PWM at DO0.
          PwmDutyCycleDO1:
            <<: *pwmDutyCycle
            address: 65
            description: Specifies the duty cycle of the PWM at DO1.
          PwmDutyCycleDO2:
            <<: *pwmDutyCycle
            address: 66
            description: Specifies the duty cycle of the PWM at DO2.
          PwmDutyCycleDO3:
            <<: *pwmDutyCycle
            address: 67
            description: Specifies the duty cycle of the PWM at DO3.
          PwmStart: &pwmStartStop
            address: 68
            type: U8
            access: Write
            maskType: PwmOutputs
            description: Starts the PWM on the selected output lines.
          PwmStop:
            <<: *pwmStartStop
            address: 69
            description: Stops the PWM on the selected output lines.
          RgbAll:
            address: 70
            type: &rgbType U8
            length: 6
            access: &rgbAccess Write
            description: Specifies the state of all RGB LED channels.
            payloadSpec:
              Green0:
                offset: 0
                description: The intensity of the green channel in the RGB0 LED.
              Red0:
                offset: 1
                description: The intensity of the red channel in the RGB0 LED.
              Blue0:
                offset: 2
                description: The intensity of the blue channel in the RGB0 LED.
              Green1:
                offset: 3
                description: The intensity of the green channel in the RGB1 LED.
              Red1:
                offset: 4
                description: The intensity of the red channel in the RGB1 LED.
              Blue1:
                offset: 5
                description: The intensity of the blue channel in the RGB1 LED.
          Rgb0: &rgbRegister
            address: 71
            type: *rgbType
            length: 3
            access: *rgbAccess
            description: Specifies the state of the RGB0 LED channels.
            interfaceType: RgbPayload
            payloadSpec:
              Green:
                offset: 0
                description: The intensity of the green channel in the RGB LED.
              Red:
                offset: 1
                description: The intensity of the red channel in the RGB LED.
              Blue:
                offset: 2
                description: The intensity of the blue channel in the RGB LED.
          Rgb1:
            <<: *rgbRegister
            address: 72
            description: Specifies the state of the RGB1 LED channels.
          Led0Current: &ledCurrent
            address: 73
            type: U8
            access: Write
            minValue: 2
            maxValue: 100
            description: Specifies the configuration of current to drive LED 0.
          Led1Current:
            <<: *ledCurrent
            address: 74
            description: Specifies the configuration of current to drive LED 1.
          Led0MaxCurrent: &ledMaxCurrent
            address: 75
            type: U8
            access: Write
            minValue: 5
            maxValue: 100
            description: Specifies the configuration of current to drive LED 0.
          Led1MaxCurrent:
            <<: *ledMaxCurrent
            address: 76
            description: Specifies the configuration of current to drive LED 1.
          EventEnable:
            address: 77
            type: U8
            access: Write
            maskType: Events
            description: Specifies the active events in the device.
          StartCameras: &cameraControl
            address: 78
            type: U8
            access: Write
            maskType: CameraOutputs
            description: Specifies the camera outputs to enable in the device.
          StopCameras:
            <<: *cameraControl
            access: [Write, Event]
            address: 79
            description: Specifies the camera outputs to disable in the device. An event will be issued when the trigger signal is actually stopped being generated.
          EnableServos: &servoControl
            address: 80
            type: U8
            access: Write
            maskType: ServoOutputs
            description: Specifies the servo outputs to enable in the device.
          DisableServos:
            <<: *servoControl
            address: 81
            description: Specifies the servo outputs to disable in the device.
          EnableEncoders:
            address: 82
            type: U8
            access: Write
            maskType: EncoderInputs
            description: Specifies the port quadrature counters to enable in the device.
          EncoderMode:
            address: 83
            type: U8
            access: Write
            maskType: EncoderModeConfig
            description: Configures the operation mode of the quadrature encoders.
          Reserved2:
            <<: *reserved
            address: 84
          Reserved3:
            <<: *reserved
            address: 85
          Reserved4:
            <<: *reserved
            address: 86
          Reserved5:
            <<: *reserved
            address: 87
          Reserved6:
            <<: *reserved
            address: 88
          Reserved7:
            <<: *reserved
            address: 89
          Reserved8:
            <<: *reserved
            address: 90
          Reserved9:
            <<: *reserved
            address: 91
          Camera0Frame: &frameAcquired
            address: 92
            type: U8
            access: Event
            maskType: FrameAcquired
            description: Specifies that a frame was acquired on camera 0.
          Camera0Frequency: &cameraFreq
            address: 93
            type: U16
            access: Write
            minValue: 1
            maxValue: 600
            description: Specifies the trigger frequency for camera 0.
          Camera1Frame:
            <<: *frameAcquired
            address: 94
            description: Specifies that a frame was acquired on camera 1.
          Camera1Frequency:
            <<: *cameraFreq
            address: 95
            description: Specifies the trigger frequency for camera 1.
          Reserved10:
            <<: *reserved
            address: 96
          Reserved11:
            <<: *reserved
            address: 97
          Reserved12:
            <<: *reserved
            address: 98
          Reserved13:
            <<: *reserved
            address: 99
          ServoMotor2Period: &servoPeriod
            address: 100
            type: U16
            access: Write
            minValue: 2
            maxValue: 65534
            description: Specifies the period of the servo motor in DO2, in microseconds.
          ServoMotor2Pulse: &servoPulse
            address: 101
            type: U16
            access: Write
            minValue: 6
            maxValue: 65530
            description: Specifies the pulse of the servo motor in DO2, in microseconds.
          ServoMotor3Period:
            <<: *servoPeriod
            address: 102
            description: Specifies the period of the servo motor in DO3, in microseconds.
          ServoMotor3Pulse:
            <<: *servoPulse
            address: 103
            description: Specifies the pulse of the servo motor in DO3, in microseconds.
          Reserved14:
            <<: *reserved
            address: 104
          Reserved15:
            <<: *reserved
            address: 105
          Reserved16:
            <<: *reserved
            address: 106
          Reserved17:
            <<: *reserved
            address: 107
          EncoderReset:
            address: 108
            type: U8
            access: Write
            maskType: EncoderInputs
            description: Reset the counter of the specified encoders to zero.
          Reserved18:
            <<: *reserved
            address: 109
          EnableSerialTimestamp:
            address: 110
            type: U8
            access: Write
            description: Enables the timestamp for serial TX.
          MimicPort0IR: &mimic
            address: 111
            type: U8
            access: Write
            maskType: MimicOutput
            description: Specifies the digital output to mimic the Port 0 IR state.
          MimicPort1IR:
            <<: *mimic
            address: 112
            description: Specifies the digital output to mimic the Port 1 IR state.
          MimicPort2IR:
            <<: *mimic
            address: 113
            description: Specifies the digital output to mimic the Port 2 IR state.
          Reserved20:
            <<: *reserved
            address: 114
          Reserved21:
            <<: *reserved
            address: 115
          Reserved22:
            <<: *reserved
            address: 116
          MimicPort0Valve:
            <<: *mimic
            address: 117
            description: Specifies the digital output to mimic the Port 0 valve state.
          MimicPort1Valve:
            <<: *mimic
            address: 118
            description: Specifies the digital output to mimic the Port 1 valve state.
          MimicPort2Valve:
            <<: *mimic
            address: 119
            description: Specifies the digital output to mimic the Port 2 valve state.
          Reserved23:
            <<: *reserved
            address: 120
          Reserved24:
            <<: *reserved
            address: 121
          PokeInputFilter:
            address: 122
            type: U8
            access: Write
            description: Specifies the low pass filter time value for poke inputs, in ms.
        bitMasks:
          DigitalInputs:
            description: Specifies the state of port digital input lines.
            bits:
              DIPort0: 0x1
              DIPort1: 0x2
              DIPort2: 0x4
              DI3: 0x8
          DigitalOutputs:
            description: Specifies the state of port digital output lines.
            bits:
              DOPort0: 0x1
              DOPort1: 0x2
              DOPort2: 0x4
              SupplyPort0: 0x8
              SupplyPort1: 0x10
              SupplyPort2: 0x20
              Led0: 0x40
              Led1: 0x80
              Rgb0: 0x100
              Rgb1: 0x200
              DO0: 0x400
              DO1: 0x800
              DO2: 0x1000
              DO3: 0x2000
          PortDigitalIOS:
            description: Specifies the state of the port DIO lines.
            bits:
              DIO0: 0x1
              DIO1: 0x2
              DIO2: 0x4
          PwmOutputs:
            description: Specifies the state of PWM output lines.
            bits:
              PwmDO0: 0x1
              PwmDO1: 0x2
              PwmDO2: 0x4
              PwmDO3: 0x8
          Events:
            description: Specifies the active events in the device.
            bits:
              PortDI: 0x1
              PortDIO: 0x2
              AnalogData: 0x4
              Camera0: 0x8
              Camera1: 0x10
          CameraOutputs:
            description: Specifies camera output enable bits.
            bits:
              CameraOutput0: 0x1
              CameraOutput1: 0x2
          ServoOutputs:
            description: Specifies servo output enable bits.
            bits:
              ServoOutput2: 0x4
              ServoOutput3: 0x8
          EncoderInputs:
            description: Specifies quadrature counter enable bits.
            bits:
              EncoderPort2: 0x4
          FrameAcquired:
            description: Specifies that camera frame was acquired.
            bits:
              FrameAcquired: 0x1
        groupMasks:
          MimicOutput:
            description: Specifies the target IO on which to mimic the specified register.
            values:
              None: 0
              DIO0: 1
              DIO1: 2
              DIO2: 3
              DO0: 4
              DO1: 5
              DO2: 6
              DO3: 7
          EncoderModeConfig:
            description: Specifies the type of reading made from the quadrature encoder.
            values:
              Position: 0
              Displacement: 1
      Modality=Behavior
      DeviceName=Behavior

    Disable SubscribeSubject HarpLickometerEvents
    -> Disable IncludeWorkflow
      Path=AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai
      DeviceMetadata:
        %YAML 1.1
        ---
        # yaml-language-server: $schema=https://harp-tech.org/draft-02/schema/device.json
        device: LicketySplit
        whoAmI: 1400
        firmwareVersion: "0.0"
        hardwareTargets: "0.5"
        registers:
          LickState:
            address: 32
            type: U8
            access: Event
            maskType: LickChannels
            description: Emits an event when the state of any lick detector changes. Value will be High when lick detected and Low otherwise.
          Channel0TriggerThreshold: &thresholdreg
            address: 33
            type: U8
            access: Write
            description: Threshold value to detect the lick. Values below this threshold will be considered a detected lick.
          Channel0UntriggerThreshold:
            <<: *thresholdreg
            address: 34
            description: Threshold value to release the lick detection state. Values above this threshold will untrigger a detected lick.
        bitMasks:
          LickChannels:
            description: The channel of the lick detector.
            bits:
              Channel0: 0x1
              Channel1: 0x2
      Modality=Behavior
      DeviceName=LicketySplit

    Disable GroupWorkflow TriggeredCameras
        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge => #2
        -> MemberSelector(Selector=Value.VideoWriter)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchVideoWriter(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.VideoWriterFfmpeg>) => #5
        #2 -> MemberSelector(Selector=Key) => #6
        #5, #6 -> WithLatestFrom
        -> CreateObservable FfmpegWriter
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject This

            SubscribeSubject This
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject ThisCameraName

            SubscribeSubject This
            -> MemberSelector(Selector=Item1)
            -> AsyncSubject ThisWriter

            SubscribeSubject TriggeredCamerasStream
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject ThisCameraName => #2
                #1, #2 -> CombineLatest
                -> Equal
                -> WorkflowOutput
            -> Take(Count=1)
            -> Merge => #12
            SubscribeSubject ThisCameraName
            -> PropertyMapping(LogName) => #14
            SubscribeSubject ThisWriter
            -> MemberSelector(Selector=ContainerExtension)
            -> PropertyMapping(VideoExtension) => #17
            SubscribeSubject ThisWriter
            -> PropertyMapping(OutputArguments(Selector=OutputArguments), InputArguments(Selector=InputArguments), FrameRate(Selector=FrameRate)) => #19
            #12, #14, #17, #19 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogSpinnakerFfmpeg.bonsai
              Modality=BehaviorVideos
              LogName=Camera3
              VideoExtension=mp4
              OutputArguments: -vf "scale=out_color_matrix=bt709:out_range=full,format=bgr24,scale=out_range=full" -c:v h264_nvenc -pix_fmt yuv420p -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -metadata author="Allen Institute for Neural Dynamics" -maxrate 700M -bufsize 350M
              InputArguments="-colorspace bt709 -color_primaries bt709 -color_range full -color_trc linear"
              Verbosity=Verbose
              FrameRate=60
        -> Merge

        SubscribeSubject TriggeredCameraController
        -> MemberSelector(Selector=Cameras)
        -> Merge => #12
        -> MemberSelector(Selector=Value.VideoWriter)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
        -> AindBehaviorDynamicRoutingBonsaiDataSchema.MatchVideoWriter(Type=TypeMapping<AindBehaviorDynamicRoutingBonsaiDataSchema.VideoWriterOpenCv>) => #15
        #12 -> MemberSelector(Selector=Key) => #16
        #15, #16 -> WithLatestFrom
        -> CreateObservable OpenCvWriter
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject This

            SubscribeSubject This
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject ThisCameraName

            SubscribeSubject This
            -> MemberSelector(Selector=Item1)
            -> AsyncSubject ThisWriter

            SubscribeSubject TriggeredCamerasStream
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                SubscribeSubject ThisCameraName => #2
                #1, #2 -> CombineLatest
                -> Equal
                -> WorkflowOutput
            -> Take(Count=1)
            -> Merge => #12
            SubscribeSubject ThisCameraName
            -> PropertyMapping(LogName) => #14
            SubscribeSubject ThisWriter
            -> MemberSelector(Selector=ContainerExtension)
            -> PropertyMapping(VideoExtension) => #17
            SubscribeSubject ThisWriter
            -> PropertyMapping(FrameRate(Selector=FrameRate), FourCC(Selector=FourCC)) => #19
            #12, #14, #17, #19 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSpinnakerOpenCv.bonsai, Modality=BehaviorVideos, LogName=FaceCamera, VideoExtension=mp4, FrameRate=30, FourCC=FMP4)
        -> Merge

GroupWorkflow TrialLogic => #7
    Defer TrialLogic
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=TaskBlocks)
        -> Merge
        -> CreateObservable DoBlock
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Block

            SubscribeSubject Block
            -> MemberSelector(Selector=TrialSets)
            -> Merge
            -> CreateObservable DoTrialSet
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject TrialSet

                SubscribeSubject TrialSet
                -> MemberSelector(Selector=AvailableTrials.Count) => #4
                SubscribeSubject TrialSet
                -> MemberSelector(Selector=Repeats) => #6
                #4, #6 -> Zip
                -> Multiply
                -> Take(Count=1)
                -> AsyncSubject TotalTrials

                SubscribeSubject TotalTrials => #11
                SubscribeSubject TrialSet
                -> MemberSelector(Selector=Repeats)
                -> PropertyMapping(Count) => #14
                #11, #14 -> Range(Start=0, Count=1)
                -> SelectMany Shuffle
                    WorkflowInput Source1

                    SubscribeSubject TrialSet => #1
                    SubscribeSubject RngSeedValue
                    -> PropertyMapping(Seed) => #3
                    #1, #3 -> ShuffleTrialSet(Seed=2)
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Merge => #17
                SubscribeSubject TotalTrials
                -> PropertyMapping(Count) => #19
                #17, #19 -> Take(Count=148)
                -> ToList
                -> Take(Count=1)
                -> AsyncSubject Trials

                SubscribeSubject Trials
                -> IntProperty(Value=0)
                -> MulticastSubject InitiateTrial

                BehaviorSubject<System.Int32> InitiateTrial
                -> CreateObservable DoTrial
                    WorkflowInput Source1 => #0
                    SubscribeSubject Trials => #1
                    #0, #1 -> Zip
                    -> InputMapping(Selector=Item2, Value(Selector=Item1))
                    -> Index(Operand=IntProperty(Value=10)) => #4
                    #4, #0 -> Zip
                    -> Take(Count=1)
                    -> AsyncSubject Trial

                    SubscribeSubject Trial => #8
                    -> Condition Rewarded
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item1.PresentationParameters.Rewarded)
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=TrialStartRewarded)
                    #8 -> Condition Unrewarded
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Item1.PresentationParameters.Rewarded)
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=TrialStartUnrewarded)

                    SubscribeSubject InterTrialIntervalDistribution => #13
                    SubscribeSubject RngSeed
                    -> PropertyMapping(RandomSource) => #15
                    #13, #15 -> AllenNeuralDynamics.AindBehaviorServices.Distributions.SampleDistribution(RandomSource="")
                    -> Take(Count=1)
                    -> AsyncSubject InterTrialInterval

                    SubscribeSubject Trial => #19
                    SubscribeSubject InterTrialInterval
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #22
                    #19, #22 -> Delay(DueTime=PT1.897S)
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Quiescence) => #24
                    -> SelectMany Quiescence
                        WorkflowInput Source1

                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.StimulusStartTime)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT1.5S)
                        -> BooleanProperty(Value=true) => #6
                        SubscribeSubject LickDetection
                        -> BooleanProperty(Value=false) => #8
                        #6, #8 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Condition EarlyLick
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=EarlyLick) => #27
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item2) => #29
                    #27, #29 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #31
                    #24 -> SelectMany ResponsePeriod => #32
                        WorkflowInput Source1 => #0
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowStartTime)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #4
                        #0, #4 -> Delay(DueTime=PT1.6S)
                        -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=ResponseWindow)
                        -> SelectMany ResponseWindow
                            SubscribeSubject LickDetection => #0
                            SubscribeSubject Trial
                            -> MemberSelector(Selector=Item1.PresentationParameters) => #2
                            #0, #2 -> Zip => #3
                            -> Condition Hit
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item2.Rewarded)
                                -> WorkflowOutput
                            -> MemberSelector(Selector=Item2.RewardAmount)
                            -> MulticastSubject GiveReward
                            -> StringProperty(Value=Hit)
                            -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Hit) => #8
                            #3 -> Condition FalseAlarm
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item2.Rewarded)
                                -> BitwiseNot
                                -> WorkflowOutput
                            -> StringProperty(Value=FalseAlarm)
                            -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=FalseAlarm) => #11
                            SubscribeSubject Trial
                            -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowDuration)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: TimeSpan.FromSeconds(it)
                            -> PropertyMapping(DueTime)
                            -> Timer(DueTime=PT0.9S) => #16
                            SubscribeSubject Trial
                            -> MemberSelector(Selector=Item1.PresentationParameters.Rewarded) => #18
                            #16, #18 -> Zip => #19
                            -> Condition CorrectRejection
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item2)
                                -> BitwiseNot
                                -> WorkflowOutput
                            -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=CorrectRejection)
                            -> StringProperty(Value=CorrectRejection) => #22
                            #19 -> Condition Miss
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item2)
                                -> WorkflowOutput
                            -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Miss)
                            -> StringProperty(Value=Miss) => #25
                            #8, #11, #22, #25 -> Merge
                            -> Take(Count=1)
                            -> AsyncSubject TrialResult

                            SubscribeSubject Trial
                            -> MemberSelector(Selector=Item1.PresentationParameters.ResponseWindowDuration)
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression: TimeSpan.FromSeconds(it)
                            -> PropertyMapping(DueTime)
                            -> Timer(DueTime=PT0.9S) => #33
                            SubscribeSubject TrialResult => #34
                            #33, #34 -> Zip
                            -> MemberSelector(Selector=Item2) => #36
                            SubscribeSubject Trial => #37
                            #36, #37 -> Zip => #38
                            -> Condition NonContingentReward => #39
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item2.Item1.PresentationParameters.NonContingentReward)
                                -> WorkflowOutput
                            -> Condition Miss
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item1)
                                -> Equal(Operand=StringProperty(Value=Miss))
                                -> WorkflowOutput
                            -> Sink GiveReward => #41
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item2.Item1.PresentationParameters.RewardAmount)
                                -> MulticastSubject GiveReward
                                -> WorkflowOutput
                            #39 -> Condition Hit => #42
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item1)
                                -> Equal(Operand=StringProperty(Value=Hit))
                                -> WorkflowOutput
                            #41, #42 -> Merge
                            -> MemberSelector(Selector=Item1) => #44
                            #38 -> Condition ContingentReward
                                WorkflowInput Source1
                                -> MemberSelector(Selector=Item2.Item1.PresentationParameters.NonContingentReward)
                                -> BitwiseNot
                                -> WorkflowOutput
                            -> MemberSelector(Selector=Item1) => #46
                            #44, #46 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Take(Count=1)
                        -> WorkflowOutput
                    -> Condition FalseAlarm => #33
                        WorkflowInput Source1
                        -> Equal(Operand=StringProperty(Value=FalseAlarm))
                        -> WorkflowOutput
                    SubscribeSubject Trial => #34
                    #33, #34 -> WithLatestFrom => #35
                    -> MemberSelector(Selector=Item2.Item2)
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=Timeout) => #37
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.TimeoutDuration)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #41
                    #37, #41 -> Delay(DueTime=PT3S) => #42
                    #32 -> Condition NonFalseAlarm => #43
                        WorkflowInput Source1
                        -> NotEqual(Operand=StringProperty(Value=FalseAlarm))
                        -> WorkflowOutput
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item2)
                    -> Add(Operand=IntProperty(Value=1)) => #46
                    #43, #46 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #48
                    #42, #48 -> Merge
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=PostResponse) => #50
                    SubscribeSubject Trial
                    -> MemberSelector(Selector=Item1.PresentationParameters.PostResponseTime)
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: TimeSpan.FromSeconds(it)
                    -> PropertyMapping(DueTime) => #54
                    #50, #54 -> Delay(DueTime=PT3S) => #55
                    #31, #55 -> Merge
                    -> Take(Count=1)
                    -> Sink Reset
                        WorkflowInput Source1
                        -> Unit
                        -> MulticastSubject StopAudio
                        -> MulticastSubject StopDrawing
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\MulticastSoftwareEvent.bonsai, EventName=TrialEnd)
                    -> WorkflowOutput
                    #24 -> CreateObservable Stimulus => #61
                        WorkflowInput Source1 => #0
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.StimulusStartTime)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #4
                        #0, #4 -> Delay(DueTime=PT1.5S)
                        -> MemberSelector(Selector=Item1.Stimulus)
                        -> MulticastSubject DrawStimulus
                        -> MulticastSubject AudioStimulus
                        -> Unit => #9
                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.StimulusDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime) => #13
                        #9, #13 -> Delay(DueTime=PT0.5S)
                        -> MulticastSubject StopDrawing
                        -> MulticastSubject StopAudio
                        -> WorkflowOutput
                    #35 -> CreateObservable Timeout => #62
                        WorkflowInput Source1
                        -> Take(Count=1)
                        -> AsyncSubject TrialInfo

                        SubscribeSubject TrialInfo
                        -> MemberSelector(Selector=Item2.Item1.PresentationParameters.TimeoutStimulus)
                        -> MulticastSubject DrawStimulus

                        SubscribeSubject Trial
                        -> MemberSelector(Selector=Item1.PresentationParameters.TimeoutDuration)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT3S)
                        -> Unit
                        -> WorkflowOutput
                    #61, #62 -> Merge
                    -> Switch
                -> Merge
                -> BehaviorSubject TrialComplete

                SubscribeSubject TrialComplete => #31
                -> Condition ContinueTrials
                    WorkflowInput Source1 => #0
                    SubscribeSubject TotalTrials => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> WorkflowOutput
                -> MulticastSubject InitiateTrial
                #31 -> Condition FinishTrials => #34
                    WorkflowInput Source1 => #0
                    SubscribeSubject TotalTrials => #1
                    #0, #1 -> WithLatestFrom
                    -> LessThan
                    -> BitwiseNot
                    -> WorkflowOutput
                #31, #34 -> TakeUntil
                -> WorkflowOutput
            -> Concat
            -> Last
            -> WorkflowOutput
        -> Concat
        -> WorkflowOutput
    -> WorkflowOutput
SubscribeSubject StartExperiment
-> PublishSubject TriggerHarpReadDump => #9
#7, #9 -> SubscribeWhen

Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift", SuppressRepetitions=false)
-> Unit
-> MulticastSubject StartExperiment

GroupWorkflow Visualization
    SubscribeSubject SoftwareEvent => #0
    SubscribeSubject TimeBase => #1
    #0, #1 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
    -> Timestamp
    -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
    -> BehaviorSubject SoftwareEventHistory

    Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder => #8
    -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
    -> PublishSubject Frame
    #8 -> Bonsai.Design.VisualizerWindow(Visible=true, Location=nil, Size=nil, WindowState=nil)

    SubscribeSubject Frame
    -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true) => #13
    SubscribeSubject SoftwareEventHistory
    -> PropertyMapping(SoftwareEvents) => #15
    #13, #15 -> SoftwareEventVisualizer
      Visible=true
      SoftwareEvents(TimestampedOfSoftwareEvent="", TimestampedOfSoftwareEvent="", TimestampedOfSoftwareEvent="", TimestampedOfSoftwareEvent="", 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)
      TrialBreakEventName=TrialEnd
      PlotHeight=500
      ShadedAreaPlotters
        ShadedAreaPlotter(EventName=TrialStartRewarded, Color=CornflowerBlue, Alpha=0.3)
        ShadedAreaPlotter(EventName=TrialStartUnrewarded, Color=BlueViolet, Alpha=0.3)
        ShadedAreaPlotter(EventName=Quiescence, Color=Green, Alpha=0.3)
        ShadedAreaPlotter(EventName=ResponseWindow, Color=Red, Alpha=0.3)
        ShadedAreaPlotter(EventName=PostResponse, Color=DimGray, Alpha=0.3)
        ShadedAreaPlotter(EventName=Timeout, Color=Silver, Alpha=0.3)
      PointPlotters
        PointPlotter(EventName=Lick, Color=DarkTurquoise, YPosition=0.5, MarkerSize=3, Marker=Diamond)
        PointPlotter(EventName=VisualStimulusStart, Color=Red, YPosition=0.9, MarkerSize=3, Marker=Down)
        PointPlotter(EventName=VisualStimulusStop, Color=Red, YPosition=0.1, MarkerSize=3, Marker=Up)
        PointPlotter(EventName=Reward, Color=DodgerBlue, YPosition=0.2, MarkerSize=3, Marker=Up)
        PointPlotter(EventName=AudioStimulusStart, Color=Orange, YPosition=0.9, MarkerSize=3, Marker=Down)
        PointPlotter(EventName=AudioStimulusStop, Color=Orange, YPosition=0.1, MarkerSize=3, Marker=Up)
