<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1920</gl:Width>
          <gl:Height>780</gl:Height>
          <gl:Title>DynamicRouting</gl:Title>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>DarkGray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Fixed</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>120</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:RenderResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw2DStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <Width>2048</Width>
        <Height>2048</Height>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>30</Width>
        <Height>20</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw2DStim</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ExtentX>360</ExtentX>
        <ExtentY>360</ExtentY>
        <SpatialFrequency>57.6</SpatialFrequency>
        <TemporalFrequency>0</TemporalFrequency>
        <Phase>0</Phase>
        <Angle>0</Angle>
        <SquareWave>false</SquareWave>
        <Contrast>2</Contrast>
        <DutyCycle xsi:nil="true" />
        <Radius>1</Radius>
        <Aperture>20</Aperture>
        <Opacity>1</Opacity>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>